PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'gender': '002'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save psydat file = False
  Screen = 1
  Show mouse = True
  Units = pix
  Window size (pixels) = (3072, 1920)
  backgroundFit = cover
  color = $(-0.4432, -0.4432, -0.4432)
  expName = main
  keyboardBackend = PsychToolbox
  logging level = error
  runMode = 1
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Routines
  Routine trial_stim
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    PolygonComponent Pre_fixation
      fillColor = white
      shape = cross
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    MovieComponent target_video
      No audio = True
      backend = opencv
      forceEndRoutine = False
      movie [set every repeat] = $ORIGINAL_PATH
      size = (1.6, 1.0)
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 2.0
      units = height
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    TextComponent pain_text
      letterHeight = 60
      pos = (-150, 350)
      startVal [condition] = $target_video.status == FINISHED
      text = 请评价您感知的疼痛强度
      units = pix
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    TextComponent help_text
      letterHeight = 60
      pos = (-150, -150)
      startVal [condition] = $target_video.status == FINISHED
      text = 您愿意提供多少程度的帮助
      units = pix
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    SliderComponent help_slider
      color = $(1.0000, 1.0000, 1.0000)
      font = SimHei
      forceEndRoutine = False
      granularity = 0
      labels = ("不帮助", "最大帮助")
      letterHeight = 50
      pos = (0, -250)
      size = (1000, 50)
      startVal [condition] = $target_video.status == FINISHED
      storeHistory = True
      styles = slider
      ticks = (0, 100)
      units = pix
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    SliderComponent pain_slider
      color = $(1.0000, 1.0000, 1.0000)
      font = SimHei
      forceEndRoutine = False
      granularity = 0
      labels = ("无痛", "极大痛苦")
      letterHeight = 50
      pos = (0, 250)
      size = (1000, 50)
      startVal [condition] = $target_video.status == FINISHED
      styles = slider
      ticks = (0, 100)
      units = pix
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        mouse = event.Mouse(visible=True, win=win)
      Each Frame:
        # --- 1. 逻辑跳转 ---
        keys = event.getKeys(keyList=['space'])
        if 'space' in keys and t >= 3.0:
            # 获取评分
            r1 = pain_slider.getRating()
            r2 = help_slider.getRating()

            if r1 is not None and r2 is not None:
                continueRoutine = False
      End Routine:
        # 1. 获取参与者在帮助意愿量表上的得分
        # help_slider 是给量表起的名字
        score = help_slider.getRating()

        # 2. 根据得分区间，从Excel的列中选择对应的路径
        # 这些变量名（nodiff_path等）必须和 Excel 的表头完全一致 [cite: 31, 263]
        if score is not None:
            if score <= 32:
                next_vid = NODIFFERENCE_PATH
            elif score <= 65:
                next_vid = MODERATE_PATH
            else:
                next_vid = RELIEF_PATH
        else:
            # 防止极端情况（没有点就跳过），默认给个不缓解
            next_vid = NODIFFERENCE_PATH

        # 3. 把这个路径存入数据文件，方便以后分析 [cite: 491]
        thisExp.addData('feedback_video_used', next_vid)

        # 每一轮结束都强制让播放器“归零”，释放内存
        target_video.stop()
  Routine trial_feedback
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    MovieComponent feedback_player
      No audio = True
      backend = opencv
      forceEndRoutine = False
      movie [set every repeat] = $next_vid
      size = (1.6, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = height
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # 如果因为某种意外 next_vid 没有拿到底稿，直接跳过这个反馈环节，防止程序卡死
        if next_vid == "" or next_vid is None:
            continueRoutine = False
      End Routine:
        # 记录这一个试次最终呈现给受试者的反馈视频路径
        thisExp.addData('final_feedback_video', next_vid)
        # 彻底杀掉当前播放器进程，强迫它在下一轮重新开始，而不是在内存里堆积
        feedback_player.status = FINISHED
        feedback_player.stop()
  Routine post_fixation
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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  Routine instr
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    TextComponent text
      letterHeight = 50
      startVal [time (s)] = 0.0
      units = pix
      wrapWidth = 2000
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      text:
        实验说明

        欢迎参加本次实验
        在接下来的任务中：

        1、您将看到一段人物表现出痛苦的视频
        2、请评价您感知的疼痛程度
        3、请决定您愿意提供多少帮助

        注意： 您的帮助意愿越高，可能需要等待的时间越长
        但人物的痛苦也会得到更有效的缓解
        接下来是练习部分，练习部分结束后会进入正式实验

        准备好后，请按 [空格键] 开始实验
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        # 1. 强制显示鼠标
        win.mouseVisible = True

        #初始化target_video，防止视频读取问题
        prac_movie = visual.MovieStim(win=win, name='prac_movie')
        target_video = visual.MovieStim(win=win, name='target_video')

        # 强制声明变量名，防止报错
        prac_feedback = visual.MovieStim(win=win, name='prac_feedback')
        feedback_player = visual.MovieStim(win=win, name='feedback_player')

        # 2. 全局退出键 (q)
        event.globalKeys.add(key='q', func=core.quit, name='shutdown')

        # 3. 初始化所有跨 Routine 变量，防止报错
        wait_duration = 0
        next_vid = ""
        prac_next_vid = ""
  Routine waiting_period
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        # 拿到刚才的分数并转化为秒
        val = help_slider.getRating()
        if val is None: val = 0
        wait_duration = (val / 100.0) * 15
        wait_timer = core.Clock()
      Each Frame:
        # 强行停留，直到时间走完
        if wait_timer.getTime() >= wait_duration:
            continueRoutine = False
    TextComponent text_2
      letterHeight = 70
      pos = (-250, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $u"已接受到帮助，请您等待"+ str(round(wait_duration, 1)) + u"秒"
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  Routine pre_fixation
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  Routine text_routine
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    TextComponent text_3
      letterHeight = 60
      pos = (-150, 0)
      startVal [time (s)] = 0.0
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      text:
        练习阶段已结束, 接下来的任务将计入正式实验数据,
        请保持专注
        按下[空格键]开始正式实验
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prac_stim
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    PolygonComponent prac_polygon
      fillColor = white
      shape = cross
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    MovieComponent prac_movie
      No audio = True
      backend = opencv
      forceEndRoutine = False
      movie [set every repeat] = $ORIGINAL_PATH
      size = (1.6, 1.0)
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 3.2
      units = height
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    TextComponent prac_pain_text
      letterHeight = 60
      pos = (-150, 350)
      startVal [condition] = $prac_movie.status == FINISHED
      text = 请评价您感知的疼痛强度
      units = pix
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    TextComponent prac_help_text
      letterHeight = 60
      pos = (-150, -150)
      startVal [condition] = $prac_movie.status == FINISHED
      text = 您愿意提供多少程度的帮助
      units = pix
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    SliderComponent prac_help_slider
      font = SimHei
      forceEndRoutine = False
      granularity = 0
      labels = ("不帮助", "最大帮助")
      letterHeight = 50
      pos = (0, -250)
      size = (1000, 50)
      startVal [condition] = $prac_movie.status == FINISHED
      styles = slider
      ticks = (0, 100)
      units = pix
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    SliderComponent prac_pain_slider
      font = SimHei
      forceEndRoutine = False
      granularity = 0
      labels = ("无痛", "极大痛苦")
      letterHeight = 50
      pos = (0, 250)
      size = (1000, 50)
      startVal [condition] = $prac_movie.status == FINISHED
      styles = slider
      ticks = (0, 100)
      units = pix
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    CodeComponent prac_stim_code
      Code Type = Auto->JS
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      Begin Routine:
        mouse = event.Mouse(visible=True, win=win)
      Each Frame:
        # --- 1. 逻辑跳转 ---
        keys = event.getKeys(keyList=['space'])
        if 'space' in keys and t >= 3.0:
            # 获取评分
            prac_r1 = prac_pain_slider.getRating()
            prac_r2 = prac_help_slider.getRating()

            if prac_r1 is not None and prac_r2 is not None:
                continueRoutine = False
      End Routine:
        # 1. 获取参与者在帮助意愿量表上的得分
        # help_slider 是给量表起的名字
        prac_score = prac_help_slider.getRating()

        # 2. 根据得分区间，从Excel的列中选择对应的路径
        # 这些变量名（nodiff_path等）必须和 Excel 的表头完全一致
        if prac_score is not None:
            if prac_score <= 32:
                prac_next_vid = NODIFFERENCE_PATH
            elif prac_score <= 65:
                prac_next_vid = MODERATE_PATH
            else:
                prac_next_vid = RELIEF_PATH
        else:
            # 防止极端情况（没有点击就跳过了），默认给个不缓解
            prac_next_vid = NODIFFERENCE_PATH

        # 3. 把这个路径存入数据文件，方便以后进行分析
        thisExp.addData('prac_feedback_video_used', prac_next_vid)

        # 每一轮结束都强制让播放器“归零”，释放内存
        prac_movie.stop()
  Routine prac_waiting
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    CodeComponent prac_waiting_code
      Code Type = Auto->JS
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      Begin Routine:
        # 拿到刚才的分数并转化为秒
        prac_val = prac_help_slider.getRating()
        if prac_val is None: prac_val = 0
        prac_wait_duration = (prac_val / 100.0) * 15
        prac_wait_timer = core.Clock()
      Each Frame:
        # 强行停留，直到时间走完
        if prac_wait_timer.getTime() >= wait_duration:
            continueRoutine = False
    TextComponent prac_waiting_text
      letterHeight = 70
      pos = (-250, 0)
      text [set every repeat] = $u"已接受到帮助，请您等待"+ str(round(wait_duration, 1)) + u"秒"
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  Routine prac_trial_feedback
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    MovieComponent prac_feedback
      No audio = True
      backend = opencv
      forceEndRoutine = False
      movie [set every repeat] = $prac_next_vid
      size = (1.6, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = height
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    CodeComponent prac_feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        # 如果因为某种意外 next_vid 没有拿到底稿，直接跳过这个反馈环节，防止程序卡死
        if prac_next_vid == "" or prac_next_vid is None:
            continueRoutine = False
      End Routine:
        # 记录这一个试次最终呈现给受试者的反馈视频路径
        thisExp.addData('prac_final_feedback_video', prac_next_vid)
        # 彻底杀掉当前播放器进程，强迫它在下一轮重新开始，而不是在内存里堆积
        prac_feedback.status = FINISHED
        prac_feedback.stop()
Flow
  Routine instr
  LoopInitiator practice_loop loopType="TrialHandler"
    conditionsFile = practice_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'组别': 1, 'ORIGINAL_PATH': 'videos\\1_Y_F_L_ORIG.mp4', 'NODIFFERENCE_PATH': 'videos\\1_Y_F_L_NODIFF.mp4', 'MODERATE_PATH': 'videos\\1_Y_F_L_MOD.mp4', 'RELIEF_PATH': 'videos\\1_Y_F_L_REL.mp4', 'AVATAR_AGE': 'YOUNG', 'AVATAR_SEX': 'FEMALE', 'INTENSITY': 'LOW'},
      {'组别': 1, 'ORIGINAL_PATH': 'videos\\1_Y_F_N_ORIG.mp4', 'NODIFFERENCE_PATH': 'videos\\1_Y_F_N_NODIFF.mp4', 'MODERATE_PATH': 'videos\\1_Y_F_N_MOD.mp4', 'RELIEF_PATH': 'videos\\1_Y_F_N_REL.mp4', 'AVATAR_AGE': 'YOUNG', 'AVATAR_SEX': 'FEMALE', 'INTENSITY': 'NEUTRAL'},
      {'组别': 2, 'ORIGINAL_PATH': 'videos\\2_O_M_H_ORIG.mp4', 'NODIFFERENCE_PATH': 'videos\\2_O_M_H_NODIFF.mp4', 'MODERATE_PATH': 'videos\\2_O_M_H_MOD.mp4', 'RELIEF_PATH': 'videos\\2_O_M_H_REL.mp4', 'AVATAR_AGE': 'OLD', 'AVATAR_SEX': 'MALE', 'INTENSITY': 'HIGH'},
      {'组别': 2, 'ORIGINAL_PATH': 'videos\\2_O_M_L_ORIG.mp4', 'NODIFFERENCE_PATH': 'videos\\2_O_M_L_NODIFF.mp4', 'MODERATE_PATH': 'videos\\2_O_M_L_MOD.mp4', 'RELIEF_PATH': 'videos\\2_O_M_L_REL.mp4', 'AVATAR_AGE': 'OLD', 'AVATAR_SEX': 'MALE', 'INTENSITY': 'LOW'}]
    Routine prac_stim
    Routine prac_waiting
    Routine prac_trial_feedback
  LoopTerminator practice_loop
  Routine text_routine
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'组别': 1, 'ORIGINAL_PATH': 'videos\\1_O_M_H_ORIG.mp4', 'NODIFFERENCE_PATH': 'videos\\1_O_M_H_NODIFF.mp4', 'MODERATE_PATH': 'videos\\1_O_M_H_MOD.mp4', 'RELIEF_PATH': 'videos\\1_O_M_H_REL.mp4', 'AVATAR_AGE': 'OLD', 'AVATAR_SEX': 'MALE', 'INTENSITY': 'HIGH'},
      {'组别': 1, 'ORIGINAL_PATH': 'videos\\1_O_M_L_ORIG.mp4', 'NODIFFERENCE_PATH': 'videos\\1_O_M_L_NODIFF.mp4', 'MODERATE_PATH': 'videos\\1_O_M_L_MOD.mp4', 'RELIEF_PATH': 'videos\\1_O_M_L_REL.mp4', 'AVATAR_AGE': 'OLD', 'AVATAR_SEX': 'MALE', 'INTENSITY': 'LOW'},
      {'组别': 1, 'ORIGINAL_PATH': 'videos\\1_O_M_N_ORIG.mp4', 'NODIFFERENCE_PATH': 'videos\\1_O_M_N_NODIFF.mp4', 'MODERATE_PATH': 'videos\\1_O_M_N_MOD.mp4', 'RELIEF_PATH': 'videos\\1_O_M_N_REL.mp4', 'AVATAR_AGE': 'OLD', 'AVATAR_SEX': 'MALE', 'INTENSITY': 'NEUTRAL'},
      {'组别': 1, 'ORIGINAL_PATH': 'videos\\1_O_F_H_ORIG.mp4', 'NODIFFERENCE_PATH': 'videos\\1_O_F_H_NODIFF.mp4', 'MODERATE_PATH': 'videos\\1_O_F_H_MOD.mp4', 'RELIEF_PATH': 'videos\\1_O_F_H_REL.mp4', 'AVATAR_AGE': 'OLD', 'AVATAR_SEX': 'FEMALE', 'INTENSITY': 'HIGH'},
      {'组别': 1, 'ORIGINAL_PATH': 'videos\\1_O_F_L_ORIG.mp4', 'NODIFFERENCE_PATH': 'videos\\1_O_F_L_NODIFF.mp4', 'MODERATE_PATH': 'videos\\1_O_F_L_MOD.mp4', 'RELIEF_PATH': 'videos\\1_O_F_L_REL.mp4', 'AVATAR_AGE': 'OLD', 'AVATAR_SEX': 'FEMALE', 'INTENSITY': 'LOW'}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
    Routine trial_stim
    Routine waiting_period
    Routine trial_feedback
  LoopTerminator trials
